<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:CaptureProperties>
            <vid:CameraProperty>
              <vid:Property>Exposure</vid:Property>
              <vid:Value>-5</vid:Value>
              <vid:ControlFlags>Manual</vid:ControlFlags>
            </vid:CameraProperty>
          </vid:CaptureProperties>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>OutputHabituation\video.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>video</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CropPolygon">
          <cv:Regions>
            <cv:ArrayOfPoint>
              <cv:Point>
                <cv:X>863</cv:X>
                <cv:Y>166</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>558</cv:X>
                <cv:Y>287</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>406</cv:X>
                <cv:Y>584</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>523</cv:X>
                <cv:Y>910</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>844</cv:X>
                <cv:Y>1055</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>1171</cv:X>
                <cv:Y>922</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>1305</cv:X>
                <cv:Y>600</cv:Y>
              </cv:Point>
              <cv:Point>
                <cv:X>1168</cv:X>
                <cv:Y>289</cv:Y>
              </cv:Point>
            </cv:ArrayOfPoint>
          </cv:Regions>
          <cv:MaskType>ToZero</cv:MaskType>
          <cv:FillValue>
            <cv:Val0>255</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:FillValue>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>CroppedImg</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RangeThreshold">
          <cv:Lower>
            <cv:Val0>1</cv:Val0>
            <cv:Val1>1</cv:Val1>
            <cv:Val2>1</cv:Val2>
            <cv:Val3>1</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>20</cv:Val0>
            <cv:Val1>20</cv:Val1>
            <cv:Val2>20</cv:Val2>
            <cv:Val3>1</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>MousePos</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>FrameNumber</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>GetCoordinates</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MousePos</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonSource">
                    <ipy:Name>Xmid</ipy:Name>
                    <ipy:Script>import random
@returns(int)
def generate():
  yield random.randint(240,650)</ipy:Script>
                  </Expression>
                  <Expression xsi:type="ipy:PythonSource">
                    <ipy:Name>Ymid</ipy:Name>
                    <ipy:Script>import random
@returns(int)
def generate():
  yield random.randint(240,650)</ipy:Script>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>168</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="4" Label="Source2" />
                  <Edge From="3" To="4" Label="Source3" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Coordinates</Name>
            </Expression>
            <Expression xsi:type="ipy:PythonTransform">
              <ipy:Name>MouseInTriggerZone?</ipy:Name>
              <ipy:Script>@returns(bool)
def process(input):
  centroid = input.Item1;
  Xmid = input.Item2.Item1;
  Ymid = input.Item2.Item2;
  size = input.Item2.Item3;
  Xmin= Xmid-round(size/2);
  Xmax = Xmid+round(size/2);
  Ymin = Ymid-round(size/2);
  Ymax = Ymid+round(size/2);
  rect = [Xmin, Ymin, Xmax, Ymax]; # [xmin ymin xmax ymax]
  if centroid.X &gt;rect[0] and centroid.X &lt; rect[2] and centroid.Y &gt; rect[1] and centroid.Y &lt; rect[3]:
    return True
  else:
    return False
</ipy:Script>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsDetected</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>DetectedFirstTime</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>OpenPort</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>start</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:SerialWriteLine">
                      <port:PortName>COM3</port:PortName>
                      <port:NewLine>\r\n</port:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>End</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>OnlyEndMessage</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>@returns(bool)
def process(value):
  return value[0:3] == "End"</ipy:Script>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT3S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>VisualCueOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>ledon</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:SerialWriteLine">
                      <port:PortName>COM3</port:PortName>
                      <port:NewLine>\r\n</port:NewLine>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT10S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Msg</Name>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>ExperimentObserver</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>FrameNumber</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Coordinates</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Arduino action</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ipy:PythonTransform">
                          <ipy:Script>@returns(bool)
def process(value):
  if(value.Item1[0:3] == "LED"):
    return True

  if(value.Item1[0:3] == "Cor"):
    return True 

  if(value.Item1[0:3] == "End"):
    return True 
  if(value.Item1[0:3] == "Wro"):
    return True 
  if(value.Item1[0:3] == "Tim"):
    return True 
</ipy:Script>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>OutputHabituation\EventFile.csv</io:FileName>
                    <io:Append>true</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>TrialDone?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ipy:PythonTransform">
                          <ipy:Name>IsEndMessage?</ipy:Name>
                          <ipy:Script>@returns(bool)
def process(value):
  return value.Item1[0:3] == "End"</ipy:Script>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Message</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Message</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>End</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>VisualCueOn</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>ledon</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:SerialWriteLine">
                      <port:PortName>COM3</port:PortName>
                      <port:NewLine>\r\n</port:NewLine>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Tracking</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>MousePos</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CroppedImg</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Coordinates</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="ipy:PythonTransform">
                    <ipy:Script>import clr
clr.AddReference("OpenCV.Net")
from OpenCV.Net import *

# Accumulators for keeping history
trajectory = None
prevpoint = None
color = Scalar.Rgb(255,0,0)
boxcolor =Scalar.Rgb(0,0,255)
thickness = 3
thickness2 = 6
box= (50,50,150,150)


@returns(IplImage)
def process(value):
  global trajectory, prevpoint
  centroid = value.Item1
  image = value.Item2
  triggerzone = Point2f(value.Item3.Item1, value.Item3.Item2)
  radius = round(value.Item3.Item3/2)
  # Initialize trajectory image accumulator if needed
  if trajectory is None:
    trajectory = IplImage(image.Size, image.Depth, 3)
    trajectory.SetZero()

  # Draw point or line depending on whether there is a past history
  if prevpoint is None:
    
    CV.Circle(trajectory,Point(centroid),thickness,color,-1)

  else:
    CV.Circle(trajectory,Point(triggerzone),thickness,boxcolor,radius)
    CV.Line(trajectory,Point(prevpoint),Point(centroid),color,thickness)

  # Draw trajectory on top of image
  output = image.Clone()
  mask = IplImage(image.Size, image.Depth, 1)
  CV.CvtColor(trajectory,mask,ColorConversion.Bgr2Gray)
  CV.Threshold(mask,mask,0,255,ThresholdTypes.Binary)
  CV.Copy(trajectory,output,mask)

  # Update history for next drawing
  prevpoint = centroid
  return output

# Reset accumulators
def unload():
  global trajectory, prevpoint
  trajectory = None
  prevpoint = None</ipy:Script>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="wie:KeyDown">
                      <wie:Filter>LButton RButton Cancel A B C Shift</wie:Filter>
                      <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>End</Name>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ipy:PythonTransform">
                          <ipy:Script>@returns(bool)
def process(value):
  return value[0:3] == "Vis"</ipy:Script>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Repeat" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source3" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="10" Label="Source1" />
                  <Edge From="6" To="9" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="13" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT1H</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:CreateSerialPort">
                <port:Name>COM3</port:Name>
                <port:PortName>COM3</port:PortName>
                <port:BaudRate>9600</port:BaudRate>
                <port:NewLine>\r\n</port:NewLine>
                <port:Parity>None</port:Parity>
                <port:ParityReplace>63</port:ParityReplace>
                <port:DataBits>8</port:DataBits>
                <port:StopBits>One</port:StopBits>
                <port:Handshake>None</port:Handshake>
                <port:DiscardNull>false</port:DiscardNull>
                <port:DtrEnable>false</port:DtrEnable>
                <port:RtsEnable>false</port:RtsEnable>
                <port:ReadBufferSize>4096</port:ReadBufferSize>
                <port:WriteBufferSize>2048</port:WriteBufferSize>
                <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SavePosition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameNumber</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MousePos</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>OutputHabituation\Position.csv</io:FileName>
              <io:Append>true</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialReadLine">
          <port:PortName>COM3</port:PortName>
          <port:NewLine>\r\n</port:NewLine>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Msg</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="12" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>